<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://files.labbench.io/xsd/5.6/experiment.xsd">
    <subject-validator regex="^S[0-9]{3}$|^TEST[0-9]{3}$"
                       advice="Please enter an ID in the form of SXXX, where X is a digit" />
    <experimental-setup-variants default="LIO">
        <experimental-setup id="LIO" name="LabBench I/O">
            <devices>
                <lio id="lio">
                    <response-devices>
                        <visual-analog-scale id="scale"
                            length="10"
                            sample-period="200"
                            timing-source="none" />
                    </response-devices>
                </lio>

                <display id="display" normative-distance="40">                    
                    <typography background-color="rgb(255,255,255)"
                                inactive-color="rgb(32,32,32)"
                                foreground-color="rgb(0,0,0)"
                                active-color="rgb(255,0,0)">

                        <top-anchor size="32" style="normal" weight="normal" color="rgb(0,0,0)" />
                        <bottom-anchor size="32" style="normal" weight="normal" color="rgb(0,0,0)" />
                        <scale-modality size="48" style="normal" weight="bold" color="rgb(0,0,0)"  />
                        <crs-category size="22" style="normal" weight="normal" color="rgb(0,0,0)" />
                        <nrs-category size="22" style="normal" weight="normal" color="rgb(0,0,0)" />                        
                    </typography>
    
                    <configurations>
                        <composite-scale id="vas"
                            experimental-setup-id="vas"
                            controller-device="lio.scale">
                            <visual-analog-scale id="pain"
                                length="10"                                                                
                                sample-period="200"
                                timing-source="none">
                                <anchors>
                                    <modality text="Pain" />
                                    <top-anchor text="10/Worst possible pain" />
                                    <bottom-anchor text="0/No pain" />
                                </anchors>
                            </visual-analog-scale>
                        </composite-scale>

                        <composite-scale id="nrs"
                            experimental-setup-id="nrs"
                            controller-device="lio.scale">
                            <numerical-scale id="nrs"
                                minimum="0"
                                maximum="10"
                                sample-period="200"
                                timing-source="none">
                                <anchors>
                                    <modality text="Pain" />
                                    <top-anchor text="10/Worst possible pain" />
                                    <bottom-anchor text="0/No pain" />
                                </anchors>
                            </numerical-scale>
                        </composite-scale>

                        <composite-scale id="crs"
                            experimental-setup-id="crs"
                            controller-device="lio.scale">
                            <categorical-scale id="pain">
                                <anchors>
                                    <modality text="Pain" />
                                    <top-anchor text="10/Worst possible pain" />
                                    <bottom-anchor text="0/No pain" />
                                </anchors>
                                <categories>
                                    <category text="None" />
                                    <category text="Mild" />
                                    <category text="Moderate" />
                                    <category text="Severe" />
                                    <category text="Very severe" />
                                    <category text="Worst possible" />
                                </categories>
                            </categorical-scale>
                        </composite-scale>
                        
                        <image-display id="image"
                            background-color="rgb(255, 255, 255)"
                            experimental-setup-id="image" />    
                    </configurations>
             </display>
            </devices>
            <device-mapping>
                <device-assignment device-id="display.image" instrument-name="ImageDisplay" />
                <device-assignment device-id="lio.scale" instrument-name="RatioScale" />

                <device-assignment device-id="display.vas" instrument-name="Scales" test-id="match: vas"/>
                <device-assignment device-id="display.nrs" instrument-name="Scales" test-id="match: nrs"/>
                <device-assignment device-id="display.crs" instrument-name="Scales" test-id="match: crs"/>
            </device-mapping>
        </experimental-setup>    
    </experimental-setup-variants>
    <protocol>
        <defines>
            <define name="Walk" value="func: Script.CreateRandomWalk(tc)" />
        </defines>
        <tests>
            <psychophysics-response-recording id="vasRecording" 
                name="Recording (Visual Analog Scale)"
                duration="60" 
                sample-rate="4"
                response-weight="1"
                signal-weight="0"
                experimental-setup-id="vas" />

            <psychophysics-response-recording id="nrsRecording" 
                name="Recording (Numerical Rating Scale)"
                duration="60" 
                sample-rate="4"
                response-weight="1"
                signal-weight="0"
                experimental-setup-id="nrs" />

            <psychophysics-response-recording id="crsRecording" 
                name="Recording (Categorical Rating Scale)"
                duration="60" 
                sample-rate="4"
                response-weight="1"
                signal-weight="0"
                experimental-setup-id="crs" />

            <psychophysics-response-recording id="vasEvents" 
                name="Recording with events (Visual Analog Scale)"
                duration="60" 
                sample-rate="4"
                response-weight="1"
                signal-weight="0"
                experimental-setup-id="vas">
                <events-makers>
                    <group id="PDT">
                        <marker id="PDT" name="Pain Detected" next-group="PTT" />
                        <marker id="STOP" name="Hand withdrawn" complete="true" />
                    </group>
                    <group id="PTT">
                        <marker id="STOP" name="Hand withdrawn" complete="true" />
                    </group>
                </events-makers>
            </psychophysics-response-recording>

            <psychophysics-response-recording id="vasSignals" 
                name="Recording ratings and signals (Visual Analog Scale)"
                duration="60" 
                sample-rate="20"
                response-weight="1"
                signal-weight="1"
                experimental-setup-id="vas">
                <test-events>
                    <instrument interface="ratio-scale" />
                </test-events>
                <signals sample="Walk.Sample()" min="0" max="10">
                    <signal id="CTRL" name="Control Signal" unit="cm" />
                </signals>
            </psychophysics-response-recording>

            <psychophysics-response-recording id="vasCombined" 
                name="Recording ratings and signals with events (Visual Analog Scale)"
                duration="60" 
                sample-rate="20"
                response-weight="1"
                signal-weight="2"
                experimental-setup-id="vas">
                <test-events>
                    <instrument interface="ratio-scale" />
                </test-events>
                <events-makers>
                    <group id="PDT">
                        <marker id="PDT" name="Pain Detected" next-group="PTT" />
                        <marker id="STOP" name="Hand withdrawn" complete="true" />
                    </group>
                    <group id="PTT">
                        <marker id="STOP" name="Hand withdrawn" complete="true" />
                    </group>
                </events-makers>
                <signals sample="Walk.Sample()" min="0" max="10">
                    <signal id="CTRL" name="Control Signal" unit="cm" />
                </signals>
            </psychophysics-response-recording>
        </tests>
        <assets>
            <file-asset id="Script" file="Script.py" />
        </assets>
    </protocol>
    <post-actions>
    </post-actions>
</experiment>